CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<TimePoint>.*)_(?P<Well>.*)_(?P<Image>.*)_350DAPI.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Dust
    Typical diameter of objects, in pixel units (Min,Max):150,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:6|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
    Select the input image:DNA
    Name the output image:MaskDust
    Use objects or an image as a mask?:Objects
    Select object for mask:Dust
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:MaskDust
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.25,0.9
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MaskDust
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:TimeCurveHDFCCL2repeat2__\g<TimePoint>_\g<Well>_\g<Image>
    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|OneDrive - TU Eindhoven\\Afstuderen\\Results\\2. Time Curve HDF CCL2\\repeat 2\\Immunofluorescence\\Cell count\\output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Dust, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|OneDrive - TU Eindhoven\\Afstuderen\\Results\\2. Time Curve HDF CCL2\\repeat 2\\Immunofluorescence\\Cell count\\output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:TimecurveHDFrepeat2Nuclei19-7
    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:12|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder sub-folder|OneDrive - TU Eindhoven\\Afstuderen\\Results\\Time Curve HDF CCL2\\Image analysis JZ_01_A_003g time curve HDF CCL2\\Cell count nuclei\\output poging 2
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:24
    Select the plate metadata:Well
    Select the well metadata:Image
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:ConcHDFCCL2Nuclei
    Which objects should be used for locations?:IdentifyPrimaryObjects
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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